PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring...............frame.................rate
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a word will be shown for a second, then, an image will be shown. Participant have to choose whether this image represent the word or not by pressing `z` if yes, 'x' if no

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterselect
    RoutineSettingsComponent letterselect
      saveStartStop = False
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    ImageComponent imageword
      image [set every repeat] = $imgdir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.07
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = image == word? press `z` if yes, `x` if no
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordshow
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    ImageComponent image
      image [set every repeat] = $worddir
      pos = (-0.5, 0)
      size = (1, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = thimgorder.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 1, 'wordid': 23, 'truestate': 1, 'worddir': 'word/wordth0231.png', 'imgdir': 'image/True/img23.png'},
      {'lang': 1, 'wordid': 61, 'truestate': 1, 'worddir': 'word/wordth0611.png', 'imgdir': 'image/True/img61.png'},
      {'lang': 1, 'wordid': 40, 'truestate': 0, 'worddir': 'word/wordth0401.png', 'imgdir': 'image/False/imgf40.png'},
      {'lang': 1, 'wordid': 31, 'truestate': 1, 'worddir': 'word/wordth0311.png', 'imgdir': 'image/True/img31.png'},
      {'lang': 1, 'wordid': 51, 'truestate': 0, 'worddir': 'word/wordth0511.png', 'imgdir': 'image/False/imgf51.png'},
      {'lang': 1, 'wordid': 24, 'truestate': 1, 'worddir': 'word/wordth0241.png', 'imgdir': 'image/True/img24.png'},
      {'lang': 1, 'wordid': 95, 'truestate': 0, 'worddir': 'word/wordth0951.png', 'imgdir': 'image/False/imgf95.png'},
      {'lang': 1, 'wordid': 23, 'truestate': 0, 'worddir': 'word/wordth0231.png', 'imgdir': 'image/False/imgf23.png'},
      {'lang': 1, 'wordid': 9, 'truestate': 0, 'worddir': 'word/wordth0091.png', 'imgdir': 'image/False/imgf09.png'},
      {'lang': 1, 'wordid': 24, 'truestate': 0, 'worddir': 'word/wordth0241.png', 'imgdir': 'image/False/imgf24.png'},
      {'lang': 1, 'wordid': 37, 'truestate': 1, 'worddir': 'word/wordth0371.png', 'imgdir': 'image/True/img37.png'},
      {'lang': 1, 'wordid': 57, 'truestate': 0, 'worddir': 'word/wordth0571.png', 'imgdir': 'image/False/imgf57.png'},
      {'lang': 1, 'wordid': 46, 'truestate': 1, 'worddir': 'word/wordth0461.png', 'imgdir': 'image/True/img46.png'}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
    Routine blank1sec
    Routine wordshow
    Routine blank1sec
    Routine letterselect
  LoopTerminator trials
  Routine ending
