PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Mergisauneg frmae rtae fo sceren, hpoefluy
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a word will be shown and subject have to choose whether this word is a real word or not
        press 'z' if it's a real word, press 'x' if it's not a real word

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent instructblank
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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      text [set every repeat]:
        Is this a real word?

        press `z` if yes, `x` if no
    TextComponent cross1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterselect
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    ImageComponent imageword
      image [set every repeat] = $worddir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Is this a real word?

        press `z` if yes, `x` if no
    TextComponent cross2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = +
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordorderen.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 2, 'stimuli': 1, 'imageid': 66, 'worddir': 'word/worden0661.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 3, 'worddir': 'word/worden0031.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 71, 'worddir': 'word/worden0712.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 27, 'worddir': 'word/worden0273.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 88, 'worddir': 'word/worden0883.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 28, 'worddir': 'word/worden0281.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 50, 'worddir': 'word/worden0501.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 41, 'worddir': 'word/worden0411.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 52, 'worddir': 'word/worden0522.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 6, 'worddir': 'word/worden0063.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 46, 'worddir': 'word/worden0463.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 30, 'worddir': 'word/worden0302.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 46, 'worddir': 'word/worden0462.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 70, 'worddir': 'word/worden0702.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 70, 'worddir': 'word/worden0701.png'},
      {'lang': 2, 'stimuli': 1, 'imageid': 8, 'worddir': 'word/worden0081.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 61, 'worddir': 'word/worden0613.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 10, 'worddir': 'word/worden0103.png'},
      {'lang': 2, 'stimuli': 3, 'imageid': 75, 'worddir': 'word/worden0753.png'},
      {'lang': 2, 'stimuli': 2, 'imageid': 63, 'worddir': 'word/worden0632.png'}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
    Routine blank1sec
    Routine letterselect
  LoopTerminator trials
  Routine ending
