PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring frame rate of screen, maybe?
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, two letter will be shown with an interval of one second, then, the participant will choose which letter is an English or Thai letter.
        press 'z' if it's a first letter, press 'x' if it's a second letter

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letter2
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    ImageComponent image_second
      image [set every repeat] = $seconddir
      pos = (-0.5, 0)
      saveStartStop = False
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine letter1
    RoutineSettingsComponent letter1
      saveStartStop = False
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    ImageComponent image_first
      image [set every repeat] = $firstdir
      pos = (-0.5, 0)
      saveStartStop = False
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine letterselect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    TextComponent text_2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $asking
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      font = Noto Sans
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        z = first letter
        x = second letter
Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letterorder_en.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 2, 'langpair': 2, 'sequence': 2, 'pairid': 6, 'firstdir': 'letter/lettkh055.png', 'seconddir': 'letter/letten071.png'},
      {'lang': 2, 'langpair': 3, 'sequence': 2, 'pairid': 7, 'firstdir': 'letter/lettgr063.png', 'seconddir': 'letter/letten061.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 1, 'pairid': 8, 'firstdir': 'letter/letten091.png', 'seconddir': 'letter/lettth132.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 1, 'pairid': 4, 'firstdir': 'letter/letten121.png', 'seconddir': 'letter/lettkh013.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 2, 'pairid': 1, 'firstdir': 'letter/lettkh092.png', 'seconddir': 'letter/letten142.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 2, 'pairid': 7, 'firstdir': 'letter/lettth101.png', 'seconddir': 'letter/letten121.png'},
      {'lang': 2, 'langpair': 3, 'sequence': 2, 'pairid': 7, 'firstdir': 'letter/lettgr063.png', 'seconddir': 'letter/letten061.png'},
      {'lang': 2, 'langpair': 3, 'sequence': 2, 'pairid': 8, 'firstdir': 'letter/lettgr063.png', 'seconddir': 'letter/letten062.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 2, 'pairid': 5, 'firstdir': 'letter/lettkh091.png', 'seconddir': 'letter/letten071.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 1, 'pairid': 3, 'firstdir': 'letter/letten153.png', 'seconddir': 'letter/lettkh159.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 1, 'pairid': 4, 'firstdir': 'letter/letten181.png', 'seconddir': 'letter/lettth142.png'}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
    Routine blank1sec
    Routine letter1
    Routine blank1sec
    Routine letter2
    Routine letterselect
  LoopTerminator trials
  Routine ending
